/gate/physics/addPhysicsList emstandard_opt3

# High cut by default
/gate/physics/Gamma/SetCutInRegion      world 1 m
/gate/physics/Electron/SetCutInRegion   world 1 m
/gate/physics/Positron/SetCutInRegion   world 1 m

# Cuts for particle in NEMACylinder
/gate/physics/Gamma/SetCutInRegion      phantom 0.1 mm
/gate/physics/Electron/SetCutInRegion   phantom 0.1 mm
/gate/physics/Positron/SetCutInRegion   phantom 0.1 mm

# Cuts for particle in LSO
/gate/physics/Gamma/SetCutInRegion      LSO 0.1 mm
/gate/physics/Electron/SetCutInRegion   LSO 0.1 mm
/gate/physics/Positron/SetCutInRegion   LSO 0.1 mm

/gate/physics/processList Enabled
/gate/physics/processList Initialized
~                                         
